---
API: 2.1
OpenSesame: 3.3.12
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title ExPsyLing2022_Class1
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/ethan/Documents/GitHub/OpenSesame/Class1"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sketchpad backward_mask
	set duration 32
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="********" x=0 y=0 z_index=0

define loop block_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 80
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 condition identical
	setcycle 0 num_letters 4
	setcycle 0 type animal
	setcycle 0 prime bull
	setcycle 0 target bull
	setcycle 0 correct_response a
	setcycle 0 block block1
	setcycle 1 condition identical
	setcycle 1 num_letters 4
	setcycle 1 type animal
	setcycle 1 prime hare
	setcycle 1 target hare
	setcycle 1 correct_response a
	setcycle 1 block block1
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	setcycle 3 condition identical
	setcycle 3 num_letters 5
	setcycle 3 type animal
	setcycle 3 prime camel
	setcycle 3 target camel
	setcycle 3 correct_response a
	setcycle 3 block block1
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	setcycle 6 condition identical
	setcycle 6 num_letters 6
	setcycle 6 type animal
	setcycle 6 prime cougar
	setcycle 6 target cougar
	setcycle 6 correct_response a
	setcycle 6 block block1
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	setcycle 8 condition identical
	setcycle 8 num_letters 7
	setcycle 8 type animal
	setcycle 8 prime buffalo
	setcycle 8 target buffalo
	setcycle 8 correct_response a
	setcycle 8 block block1
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	setcycle 11 condition identical
	setcycle 11 num_letters 8
	setcycle 11 type animal
	setcycle 11 prime chipmunk
	setcycle 11 target chipmunk
	setcycle 11 correct_response a
	setcycle 11 block block1
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	setcycle 14 condition identical
	setcycle 14 num_letters 4
	setcycle 14 type fruit_veg
	setcycle 14 prime bean
	setcycle 14 target bean
	setcycle 14 correct_response f
	setcycle 14 block block1
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	setcycle 17 condition identical
	setcycle 17 num_letters 5
	setcycle 17 type fruit_veg
	setcycle 17 prime galia
	setcycle 17 target galia
	setcycle 17 correct_response f
	setcycle 17 block block1
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	setcycle 20 condition identical
	setcycle 20 num_letters 6
	setcycle 20 type fruit_veg
	setcycle 20 prime cherry
	setcycle 20 target cherry
	setcycle 20 correct_response f
	setcycle 20 block block1
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	setcycle 22 condition identical
	setcycle 22 num_letters 7
	setcycle 22 type fruit_veg
	setcycle 22 prime apricot
	setcycle 22 target apricot
	setcycle 22 correct_response f
	setcycle 22 block block1
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	setcycle 25 condition identical
	setcycle 25 num_letters 8
	setcycle 25 type fruit_veg
	setcycle 25 prime eggplant
	setcycle 25 target eggplant
	setcycle 25 correct_response f
	setcycle 25 block block1
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	setcycle 28 condition "semi-scrambled"
	setcycle 28 num_letters 4
	setcycle 28 type animal
	setcycle 28 prime claf
	setcycle 28 target calf
	setcycle 28 correct_response a
	setcycle 28 block block1
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	setcycle 31 condition "semi-scrambled"
	setcycle 31 num_letters 5
	setcycle 31 type animal
	setcycle 31 prime hrsoe
	setcycle 31 target horse
	setcycle 31 correct_response a
	setcycle 31 block block1
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	setcycle 33 condition "semi-scrambled"
	setcycle 33 num_letters 6
	setcycle 33 type animal
	setcycle 33 prime wabmot
	setcycle 33 target wombat
	setcycle 33 correct_response a
	setcycle 33 block block1
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	setcycle 36 condition "semi-scrambled"
	setcycle 36 num_letters 7
	setcycle 36 type animal
	setcycle 36 prime cikechn
	setcycle 36 target chicken
	setcycle 36 correct_response a
	setcycle 36 block block1
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	setcycle 39 condition "semi-scrambled"
	setcycle 39 num_letters 8
	setcycle 39 type animal
	setcycle 39 prime eanhplet
	setcycle 39 target elephant
	setcycle 39 correct_response a
	setcycle 39 block block1
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	setcycle 41 condition "semi-scrambled"
	setcycle 41 num_letters 4
	setcycle 41 type fruit_veg
	setcycle 41 prime dtae
	setcycle 41 target date
	setcycle 41 correct_response f
	setcycle 41 block block1
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	setcycle 44 condition "semi-scrambled"
	setcycle 44 num_letters 5
	setcycle 44 type fruit_veg
	setcycle 44 prime loemn
	setcycle 44 target lemon
	setcycle 44 correct_response f
	setcycle 44 block block1
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	setcycle 46 condition "semi-scrambled"
	setcycle 46 num_letters 6
	setcycle 46 type fruit_veg
	setcycle 46 prime cuitrs
	setcycle 46 target citrus
	setcycle 46 correct_response f
	setcycle 46 block block1
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	setcycle 49 condition "semi-scrambled"
	setcycle 49 num_letters 7
	setcycle 49 type fruit_veg
	setcycle 49 prime aoadcvo
	setcycle 49 target avocado
	setcycle 49 correct_response f
	setcycle 49 block block1
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	setcycle 54 condition "fully-scrambled"
	setcycle 54 num_letters 4
	setcycle 54 type animal
	setcycle 54 prime aotg
	setcycle 54 target goat
	setcycle 54 correct_response a
	setcycle 54 block block1
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	setcycle 67 condition "fully-scrambled"
	setcycle 67 num_letters 4
	setcycle 67 type fruit_veg
	setcycle 67 prime opem
	setcycle 67 target pome
	setcycle 67 correct_response f
	setcycle 67 block block1
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	run trials

define loop block_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 80
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 condition identical
	setcycle 0 num_letters 4
	setcycle 0 type animal
	setcycle 0 prime calf
	setcycle 0 target calf
	setcycle 0 correct_response a
	setcycle 0 block block2
	setcycle 1 condition identical
	setcycle 1 num_letters 4
	setcycle 1 type animal
	setcycle 1 prime lamb
	setcycle 1 target lamb
	setcycle 1 correct_response a
	setcycle 1 block block2
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	setcycle 3 condition identical
	setcycle 3 num_letters 5
	setcycle 3 type animal
	setcycle 3 prime horse
	setcycle 3 target horse
	setcycle 3 correct_response a
	setcycle 3 block block2
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	setcycle 5 condition identical
	setcycle 5 num_letters 6
	setcycle 5 type animal
	setcycle 5 prime wombat
	setcycle 5 target wombat
	setcycle 5 correct_response a
	setcycle 5 block block2
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	setcycle 8 condition identical
	setcycle 8 num_letters 7
	setcycle 8 type animal
	setcycle 8 prime chicken
	setcycle 8 target chicken
	setcycle 8 correct_response a
	setcycle 8 block block2
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	setcycle 11 condition identical
	setcycle 11 num_letters 8
	setcycle 11 type animal
	setcycle 11 prime elephant
	setcycle 11 target elephant
	setcycle 11 correct_response a
	setcycle 11 block block2
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	setcycle 13 condition identical
	setcycle 13 num_letters 4
	setcycle 13 type fruit_veg
	setcycle 13 prime date
	setcycle 13 target date
	setcycle 13 correct_response f
	setcycle 13 block block2
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	setcycle 16 condition identical
	setcycle 16 num_letters 5
	setcycle 16 type fruit_veg
	setcycle 16 prime lemon
	setcycle 16 target lemon
	setcycle 16 correct_response f
	setcycle 16 block block2
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	setcycle 18 condition identical
	setcycle 18 num_letters 6
	setcycle 18 type fruit_veg
	setcycle 18 prime citrus
	setcycle 18 target citrus
	setcycle 18 correct_response f
	setcycle 18 block block2
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	setcycle 21 condition identical
	setcycle 21 num_letters 7
	setcycle 21 type fruit_veg
	setcycle 21 prime avocado
	setcycle 21 target avocado
	setcycle 21 correct_response f
	setcycle 21 block block2
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	setcycle 24 condition identical
	setcycle 24 num_letters 8
	setcycle 24 type fruit_veg
	setcycle 24 prime scallion
	setcycle 24 target scallion
	setcycle 24 correct_response f
	setcycle 24 block block2
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	setcycle 26 condition "semi-scrambled"
	setcycle 26 num_letters 4
	setcycle 26 type animal
	setcycle 26 prime gaot
	setcycle 26 target goat
	setcycle 26 correct_response a
	setcycle 26 block block2
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	setcycle 28 condition "semi-scrambled"
	setcycle 28 num_letters 5
	setcycle 28 type animal
	setcycle 28 prime boisn
	setcycle 28 target bison
	setcycle 28 correct_response a
	setcycle 28 block block2
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	setcycle 31 condition "semi-scrambled"
	setcycle 31 num_letters 6
	setcycle 31 type animal
	setcycle 31 prime bveear
	setcycle 31 target beaver
	setcycle 31 correct_response a
	setcycle 31 block block2
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	setcycle 34 condition "semi-scrambled"
	setcycle 34 num_letters 7
	setcycle 34 type animal
	setcycle 34 prime dlhoipn
	setcycle 34 target dolphin
	setcycle 34 correct_response a
	setcycle 34 block block2
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	setcycle 36 condition "semi-scrambled"
	setcycle 36 num_letters 8
	setcycle 36 type animal
	setcycle 36 prime apnleote
	setcycle 36 target antelope
	setcycle 36 correct_response a
	setcycle 36 block block2
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	setcycle 39 condition "semi-scrambled"
	setcycle 39 num_letters 4
	setcycle 39 type fruit_veg
	setcycle 39 prime pmoe
	setcycle 39 target pome
	setcycle 39 correct_response f
	setcycle 39 block block2
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	setcycle 41 condition "semi-scrambled"
	setcycle 41 num_letters 5
	setcycle 41 type fruit_veg
	setcycle 41 prime ooinn
	setcycle 41 target onion
	setcycle 41 correct_response f
	setcycle 41 block block2
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	setcycle 44 condition "semi-scrambled"
	setcycle 44 num_letters 6
	setcycle 44 type fruit_veg
	setcycle 44 prime croart
	setcycle 44 target carrot
	setcycle 44 correct_response f
	setcycle 44 block block2
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	setcycle 47 condition "semi-scrambled"
	setcycle 47 num_letters 7
	setcycle 47 type fruit_veg
	setcycle 47 prime ccunoot
	setcycle 47 target coconut
	setcycle 47 correct_response f
	setcycle 47 block block2
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	setcycle 52 condition "fully-scrambled"
	setcycle 52 num_letters 4
	setcycle 52 type animal
	setcycle 52 prime lulb
	setcycle 52 target bull
	setcycle 52 correct_response a
	setcycle 52 block block2
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	setcycle 66 condition "fully-scrambled"
	setcycle 66 num_letters 4
	setcycle 66 type fruit_veg
	setcycle 66 prime naeb
	setcycle 66 target bean
	setcycle 66 correct_response f
	setcycle 66 block block2
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	run trials

define loop block_3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 80
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 condition identical
	setcycle 0 num_letters 4
	setcycle 0 type animal
	setcycle 0 prime goat
	setcycle 0 target goat
	setcycle 0 correct_response a
	setcycle 0 block block3
	setcycle 1 condition identical
	setcycle 1 num_letters 4
	setcycle 1 type animal
	setcycle 1 prime lion
	setcycle 1 target lion
	setcycle 1 correct_response a
	setcycle 1 block block3
	setcycle 2 condition identical
	setcycle 2 num_letters 5
	setcycle 2 type animal
	setcycle 2 prime bison
	setcycle 2 target bison
	setcycle 2 correct_response a
	setcycle 2 block block3
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	setcycle 5 condition identical
	setcycle 5 num_letters 6
	setcycle 5 type animal
	setcycle 5 prime beaver
	setcycle 5 target beaver
	setcycle 5 correct_response a
	setcycle 5 block block3
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	setcycle 8 condition identical
	setcycle 8 num_letters 7
	setcycle 8 type animal
	setcycle 8 prime dolphin
	setcycle 8 target dolphin
	setcycle 8 correct_response a
	setcycle 8 block block3
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	setcycle 10 condition identical
	setcycle 10 num_letters 8
	setcycle 10 type animal
	setcycle 10 prime antelope
	setcycle 10 target antelope
	setcycle 10 correct_response a
	setcycle 10 block block3
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	setcycle 13 condition identical
	setcycle 13 num_letters 4
	setcycle 13 type fruit_veg
	setcycle 13 prime pome
	setcycle 13 target pome
	setcycle 13 correct_response f
	setcycle 13 block block3
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	setcycle 15 condition identical
	setcycle 15 num_letters 5
	setcycle 15 type fruit_veg
	setcycle 15 prime onion
	setcycle 15 target onion
	setcycle 15 correct_response f
	setcycle 15 block block3
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	setcycle 18 condition identical
	setcycle 18 num_letters 6
	setcycle 18 type fruit_veg
	setcycle 18 prime carrot
	setcycle 18 target carrot
	setcycle 18 correct_response f
	setcycle 18 block block3
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	setcycle 21 condition identical
	setcycle 21 num_letters 7
	setcycle 21 type fruit_veg
	setcycle 21 prime coconut
	setcycle 21 target coconut
	setcycle 21 correct_response f
	setcycle 21 block block3
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	setcycle 23 condition identical
	setcycle 23 num_letters 8
	setcycle 23 type fruit_veg
	setcycle 23 prime broccoli
	setcycle 23 target broccoli
	setcycle 23 correct_response f
	setcycle 23 block block3
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	setcycle 26 condition "semi-scrambled"
	setcycle 26 num_letters 4
	setcycle 26 type animal
	setcycle 26 prime blul
	setcycle 26 target bull
	setcycle 26 correct_response a
	setcycle 26 block block3
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	setcycle 29 condition "semi-scrambled"
	setcycle 29 num_letters 5
	setcycle 29 type animal
	setcycle 29 prime cmeal
	setcycle 29 target camel
	setcycle 29 correct_response a
	setcycle 29 block block3
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	setcycle 32 condition "semi-scrambled"
	setcycle 32 num_letters 6
	setcycle 32 type animal
	setcycle 32 prime cgaour
	setcycle 32 target cougar
	setcycle 32 correct_response a
	setcycle 32 block block3
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	setcycle 34 condition "semi-scrambled"
	setcycle 34 num_letters 7
	setcycle 34 type animal
	setcycle 34 prime bluaffo
	setcycle 34 target buffalo
	setcycle 34 correct_response a
	setcycle 34 block block3
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	setcycle 37 condition "semi-scrambled"
	setcycle 37 num_letters 8
	setcycle 37 type animal
	setcycle 37 prime cunhpmik
	setcycle 37 target chipmunk
	setcycle 37 correct_response a
	setcycle 37 block block3
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	setcycle 40 condition "semi-scrambled"
	setcycle 40 num_letters 4
	setcycle 40 type fruit_veg
	setcycle 40 prime baen
	setcycle 40 target bean
	setcycle 40 correct_response f
	setcycle 40 block block3
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	setcycle 43 condition "semi-scrambled"
	setcycle 43 num_letters 5
	setcycle 43 type fruit_veg
	setcycle 43 prime giala
	setcycle 43 target galia
	setcycle 43 correct_response f
	setcycle 43 block block3
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	setcycle 46 condition "semi-scrambled"
	setcycle 46 num_letters 6
	setcycle 46 type fruit_veg
	setcycle 46 prime crhery
	setcycle 46 target cherry
	setcycle 46 correct_response f
	setcycle 46 block block3
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	setcycle 48 condition "semi-scrambled"
	setcycle 48 num_letters 7
	setcycle 48 type fruit_veg
	setcycle 48 prime aocpirt
	setcycle 48 target apricot
	setcycle 48 correct_response f
	setcycle 48 block block3
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	setcycle 54 condition "fully-scrambled"
	setcycle 54 num_letters 4
	setcycle 54 type animal
	setcycle 54 prime lcfa
	setcycle 54 target calf
	setcycle 54 correct_response a
	setcycle 54 block block3
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	setcycle 67 condition "fully-scrambled"
	setcycle 67 num_letters 4
	setcycle 67 type fruit_veg
	setcycle 67 prime taed
	setcycle 67 target date
	setcycle 67 correct_response f
	setcycle 67 block block3
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	run trials

define sketchpad break
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Half-way!<br /><br />Time for a break.<br /><br />Press any key to start the final part of the experiment..<br />" x=0 y=0 z_index=0

define sketchpad correct
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=green font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Correct!" x=0 y=0 z_index=0

define inline_javascript counter_balance
	set description "Executes JavaScript code"
	___run__
	
	
	
	var list = [1,2,3]
	vars.block_picker  = random.pick(list);
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run counter_balance always
	run instructions_1 always
	run instructions_2 always
	run instructions_3 always
	run practice_loop always
	run instructions_4 always
	run block_1 "[block_picker] = 1"
	run block_2 "[block_picker] = 2"
	run block_3 "[block_picker] = 3"

define sketchpad fix
	set duration 650
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad forward_mask
	set duration 32
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="********" x=0 y=0 z_index=0

define sketchpad incorrect
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Incorrect!" x=0 y=0 z_index=0

define sketchpad instructions_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="In this experiment, you will see some words, separated by +.<br /><br />When you see a word, decide if it is an animal or a fruit/vegetable.<br /><br />Press the A key if it is an animal<br /><br />Press the F key if it is a fruit or vegetable<br /><br />After each word, you will receive feedback as to whether<br /> you responded correctly or incorrectly.<br /><br />Try to respond as quickly and accurately as you can.<br /><br />If you take too long, the experiment will continue automatically.<br /><br />Press any key to continue…<br />" x=0 y=0 z_index=0

define sketchpad instructions_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="The whole experiment will take around 5 minutes to complete.<br /><br />There will be a break halfway through the experiment.<br /><br />Press any key to continue…<br /><br />" x=0 y=0 z_index=0

define sketchpad instructions_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="First there will be a short test round. <br /><br />Press any key to begin…<br />" x=0 y=0 z_index=0

define sketchpad instructions_4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Now the test round is finished and the real experiment will begin.<br /><br />Remember to respond as quickly and accurately as you can. <br /><br />If you make a mistake, don’t worry, just continue to the next word.<br /><br />Remember: <br /><br />Fress A for animal and press F for fruit or vegetable.<br /><br />Press any key to begin the experiment…<br />" x=0 y=0 z_index=0

define keyboard_response keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 condition practice
	setcycle 0 num_letters 5
	setcycle 0 type fruit_veg
	setcycle 0 prime "#####"
	setcycle 0 target apple
	setcycle 0 correct_response f
	setcycle 0 block practice
	setcycle 1 condition practice
	setcycle 1 num_letters 4
	setcycle 1 type animal
	setcycle 1 prime "#####"
	setcycle 1 target wolf
	setcycle 1 correct_response a
	setcycle 1 block practice
	setcycle 2 condition practice
	setcycle 2 num_letters 5
	setcycle 2 type fruit_veg
	setcycle 2 prime "#####"
	setcycle 2 target melon
	setcycle 2 correct_response f
	setcycle 2 block practice
	setcycle 3 condition practice
	setcycle 3 num_letters 5
	setcycle 3 type animal
	setcycle 3 prime "#####"
	setcycle 3 target hound
	setcycle 3 correct_response a
	setcycle 3 block practice
	setcycle 4 condition practice
	setcycle 4 num_letters 6
	setcycle 4 type fruit_veg
	setcycle 4 prime "#####"
	setcycle 4 target tomato
	setcycle 4 correct_response f
	setcycle 4 block practice
	setcycle 5 condition practice
	setcycle 5 num_letters 6
	setcycle 5 type animal
	setcycle 5 prime "#####"
	setcycle 5 target spider
	setcycle 5 correct_response a
	setcycle 5 block practice
	run trials

define sketchpad prime
	set duration 30
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="[prime]" x=0 y=0 z_index=0

define sketchpad target
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="[target]" x=0 y=0 z_index=0

define sequence trials
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run break "[count_trials] = 40"
	run fix always
	run forward_mask always
	run prime always
	run backward_mask always
	run target always
	run keyboard_response always
	run logger always
	run incorrect "[correct] = 0"
	run correct "[correct] = 1"

