---
API: 2.1
OpenSesame: 3.3.12
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title ExPsyLing_Masked_repetition_priming2_A
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/ethan/Documents/GitHub/OpenSesame/Masked repetition priming/experiment"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sketchpad Thanks
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="All done!<br /><br />Thanks for participating!<br /><br />Please press any key to continue and save your data." x=0 y=0 z_index=0

define sketchpad blank
	set duration 80
	set description "Displays stimuli"

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run short_loop_A always
	run break always
	run long_loop_A always
	run Thanks always

define sketchpad break
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Break time!<br /><br />Press any key to begin the second half of the experiment.." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions1 always
	run instructions1a always
	run instructions2 always
	run instructions3 always
	run instructions4 always
	run practice_loop always
	run instructions5 always
	run block_sequence always

define sketchpad fixation
	set duration 539
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=30 html=yes show_if=always text="######" x=0 y=0 z_index=0

define sketchpad instructions1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In this experiment, you will see some words, separated by #####.<br /><br />When you see the word, your job is to say whether it is something natural or man-made.<br /><br />Press the N key if it is natural<br /><br />Press the M key if it is man-made<br /><br />Press any key to continue.." x=0 y=0 z_index=0

define sketchpad instructions1a
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Natural could be things like plants, animals, rocks.. <br />anything from the natural world.<br /><br />Man-made refers to anything produced by people: objects, tools, machines.. <br />anything that requires a person to make it.<br /><br />Press any key to continue.." x=0 y=0 z_index=0

define sketchpad instructions2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Try to respond as quickly and accurately as you can.<br /><br />You need to respond within two seconds.<br /><br />Sometimes, you will make a mistake. That's ok. <br /><br />Sometimes, you might be unsure what the word means. That's ok too.<br /><br />Just go on to the next one.<br /><br />Press any key to continue.." x=0 y=0 z_index=0

define sketchpad instructions3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="The whole experiment will take you around 6-7 minutes to complete.<br /><br />There is a break when you are halfway through.<br /><br />Press any key to continue.." x=0 y=0 z_index=0

define sketchpad instructions4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Before you start the real experiment, there is a quick practice round.<br /><br />Remember:<br /><br />press N if the word is something natural<br /><br />press M if the word is something man-made<br /><br />Press any key to start the practice round..<br />" x=0 y=0 z_index=0

define sketchpad instructions5
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Practice complete!<br /><br />Now you are ready to start the real experiment.<br /><br />Remember to answer as quickly as you can, as you only have two seconds to respond.<br /><br />Enjoy!<br /><br />Press any key to begin.." x=0 y=0 z_index=0

define keyboard_response keyboard_response_long
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define keyboard_response keyboard_response_short
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log response_time
	log condition
	log congruence
	log soa_condition
	log prime
	log target
	log correct
	log time_prime
	log time_mask1
	log time_mask2
	log counterbalance

define loop long_loop_A
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 60
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 prime crab
	setcycle 0 target CRAB
	setcycle 0 condition Con_Nat
	setcycle 0 soa_condition long
	setcycle 0 congruence congruent
	setcycle 0 correct_response n
	setcycle 0 counterbalance A
	setcycle 1 prime swan
	setcycle 1 target SWAN
	setcycle 1 condition Con_Nat
	setcycle 1 soa_condition long
	setcycle 1 congruence congruent
	setcycle 1 correct_response n
	setcycle 1 counterbalance A
	setcycle 2 prime slug
	setcycle 2 target SLUG
	setcycle 2 condition Con_Nat
	setcycle 2 soa_condition long
	setcycle 2 congruence congruent
	setcycle 2 correct_response n
	setcycle 2 counterbalance A
	setcycle 3 prime peas
	setcycle 3 target PEAS
	setcycle 3 condition Con_Nat
	setcycle 3 soa_condition long
	setcycle 3 congruence congruent
	setcycle 3 correct_response n
	setcycle 3 counterbalance A
	setcycle 4 prime reef
	setcycle 4 target REEF
	setcycle 4 condition Con_Nat
	setcycle 4 soa_condition long
	setcycle 4 congruence congruent
	setcycle 4 correct_response n
	setcycle 4 counterbalance A
	setcycle 5 prime clam
	setcycle 5 target CLAM
	setcycle 5 condition Con_Nat
	setcycle 5 soa_condition long
	setcycle 5 congruence congruent
	setcycle 5 correct_response n
	setcycle 5 counterbalance A
	setcycle 6 prime hare
	setcycle 6 target HARE
	setcycle 6 condition Con_Nat
	setcycle 6 soa_condition long
	setcycle 6 congruence congruent
	setcycle 6 correct_response n
	setcycle 6 counterbalance A
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	setcycle 15 prime arrow
	setcycle 15 target ARROW
	setcycle 15 condition Con_Synth
	setcycle 15 soa_condition long
	setcycle 15 congruence congruent
	setcycle 15 correct_response m
	setcycle 15 counterbalance A
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	setcycle 30 prime cake
	setcycle 30 target TRASH
	setcycle 30 condition Inc_Synth_Synth
	setcycle 30 soa_condition long
	setcycle 30 congruence incongruent
	setcycle 30 correct_response m
	setcycle 30 counterbalance A
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	setcycle 38 prime bowl
	setcycle 38 target WOLF
	setcycle 38 condition Inc_Synth_Nat
	setcycle 38 soa_condition long
	setcycle 38 congruence incongruent
	setcycle 38 correct_response n
	setcycle 38 counterbalance A
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	setcycle 45 prime storm
	setcycle 45 target LAND
	setcycle 45 condition Inc_Nat_Nat
	setcycle 45 soa_condition long
	setcycle 45 congruence incongruent
	setcycle 45 correct_response m
	setcycle 45 counterbalance A
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	setcycle 53 prime cloud
	setcycle 53 target MOTEL
	setcycle 53 condition Inc_Nat_Synth
	setcycle 53 soa_condition long
	setcycle 53 congruence incongruent
	setcycle 53 correct_response m
	setcycle 53 counterbalance A
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	run long_sequence

define sequence long_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run mask1 always
	run prime always
	run mask2 always
	run blank always
	run target_long always
	run keyboard_response_long always
	run logger always

define sketchpad mask1
	set duration 32
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=no show_if=always text="#####" x=0 y=0 z_index=0

define sketchpad mask2
	set duration 32
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=30 html=no show_if=always text="######" x=0 y=0 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 prime abjdhjs
	setcycle 0 target HORSE
	setcycle 0 condition practice
	setcycle 0 soa_condition practice
	setcycle 0 congruence practice
	setcycle 0 correct_response n
	setcycle 1 prime iweonf
	setcycle 1 target BOAT
	setcycle 1 condition practice
	setcycle 1 soa_condition practice
	setcycle 1 congruence practice
	setcycle 1 correct_response m
	setcycle 2 prime nvoiuh
	setcycle 2 target HOUSE
	setcycle 2 condition practice
	setcycle 2 soa_condition practice
	setcycle 2 congruence practice
	setcycle 2 correct_response m
	setcycle 3 prime snjghf
	setcycle 3 target SHEEP
	setcycle 3 condition practice
	setcycle 3 soa_condition practice
	setcycle 3 congruence practice
	setcycle 3 correct_response n
	run practice_sequence

define sequence practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run mask1 always
	run prime always
	run mask2 always
	run target_short always
	run keyboard_response_short always
	run logger always

define sketchpad prime
	set duration 32
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=30 html=no show_if=always text="[prime]" x=0 y=0 z_index=0

define loop short_loop_A
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 60
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 prime seed
	setcycle 0 target SEED
	setcycle 0 condition Con_Nat
	setcycle 0 soa_condition short
	setcycle 0 congruence congruent
	setcycle 0 correct_response n
	setcycle 0 counterbalance A
	setcycle 1 prime soil
	setcycle 1 target SOIL
	setcycle 1 condition Con_Nat
	setcycle 1 soa_condition short
	setcycle 1 congruence congruent
	setcycle 1 correct_response n
	setcycle 1 counterbalance A
	setcycle 2 prime deer
	setcycle 2 target DEER
	setcycle 2 condition Con_Nat
	setcycle 2 soa_condition short
	setcycle 2 congruence congruent
	setcycle 2 correct_response n
	setcycle 2 counterbalance A
	setcycle 3 prime creek
	setcycle 3 target CREEK
	setcycle 3 condition Con_Nat
	setcycle 3 soa_condition short
	setcycle 3 congruence congruent
	setcycle 3 correct_response n
	setcycle 3 counterbalance A
	setcycle 4 prime worm
	setcycle 4 target WORM
	setcycle 4 condition Con_Nat
	setcycle 4 soa_condition short
	setcycle 4 congruence congruent
	setcycle 4 correct_response n
	setcycle 4 counterbalance A
	setcycle 5 prime whale
	setcycle 5 target WHALE
	setcycle 5 condition Con_Nat
	setcycle 5 soa_condition short
	setcycle 5 congruence congruent
	setcycle 5 correct_response n
	setcycle 5 counterbalance A
	setcycle 6 prime puppy
	setcycle 6 target PUPPY
	setcycle 6 condition Con_Nat
	setcycle 6 soa_condition short
	setcycle 6 congruence congruent
	setcycle 6 correct_response n
	setcycle 6 counterbalance A
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	setcycle 15 prime rope
	setcycle 15 target ROPE
	setcycle 15 condition Con_Synth
	setcycle 15 soa_condition short
	setcycle 15 congruence congruent
	setcycle 15 correct_response m
	setcycle 15 counterbalance A
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	setcycle 30 prime kiosk
	setcycle 30 target SOFA
	setcycle 30 condition Inc_Synth_Synth
	setcycle 30 soa_condition short
	setcycle 30 congruence incongruent
	setcycle 30 correct_response m
	setcycle 30 counterbalance A
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	setcycle 37 prime harp
	setcycle 37 target SNAIL
	setcycle 37 condition Inc_Synth_Nat
	setcycle 37 soa_condition short
	setcycle 37 congruence incongruent
	setcycle 37 correct_response n
	setcycle 37 counterbalance A
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	setcycle 45 prime fern
	setcycle 45 target PETAL
	setcycle 45 condition Inc_Nat_Nat
	setcycle 45 soa_condition short
	setcycle 45 congruence incongruent
	setcycle 45 correct_response n
	setcycle 45 counterbalance A
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	setcycle 51 prime finch
	setcycle 51 target SLOTH
	setcycle 51 condition Nat_Nat_Synth
	setcycle 51 soa_condition short
	setcycle 51 congruence incongruent
	setcycle 51 correct_response m
	setcycle 51 counterbalance A
	setcycle 52 prime melon
	setcycle 52 target HOSE
	setcycle 52 condition Inc_Nat_Synth
	setcycle 52 soa_condition short
	setcycle 52 congruence incongruent
	setcycle 52 correct_response m
	setcycle 52 counterbalance A
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	run short_sequence

define sequence short_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run mask1 always
	run prime always
	run mask2 always
	run target_short always
	run keyboard_response_short always
	run logger always

define sketchpad target_long
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=30 html=yes show_if=always text="[target]" x=0 y=0 z_index=0

define sketchpad target_short
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=30 html=yes show_if=always text="[target]" x=0 y=0 z_index=0

