---
API: 2.1
OpenSesame: 3.3.11a1
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title Sentence_verification
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/ethan/Documents/GitHub/OpenSesame/SentenceVerification"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define sketchpad ISI
	set duration 200
	set description "Displays stimuli"

define loop block_one
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 91
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 true_false FALSE
	setcycle 0 condition P1
	setcycle 0 stim "Ping Pong has baskets."
	setcycle 0 correct_response "[false_response]"
	setcycle 1 true_false FALSE
	setcycle 1 condition P1
	setcycle 1 stim "London has pig farms."
	setcycle 1 correct_response "[false_response]"
	setcycle 2 true_false FALSE
	setcycle 2 condition P1
	setcycle 2 stim "A daisy is black."
	setcycle 2 correct_response "[false_response]"
	setcycle 3 true_false FALSE
	setcycle 3 condition P1
	setcycle 3 stim "A banana has bones."
	setcycle 3 correct_response "[false_response]"
	setcycle 4 true_false FALSE
	setcycle 4 condition P1
	setcycle 4 stim "Mints are salty."
	setcycle 4 correct_response "[false_response]"
	setcycle 5 true_false FALSE
	setcycle 5 condition P1
	setcycle 5 stim "A shrimp can fly."
	setcycle 5 correct_response "[false_response]"
	setcycle 6 true_false FALSE
	setcycle 6 condition P1
	setcycle 6 stim "A canoe has a sail."
	setcycle 6 correct_response "[false_response]"
	setcycle 7 true_false FALSE
	setcycle 7 condition P1
	setcycle 7 stim "Japan has Biden."
	setcycle 7 correct_response "[false_response]"
	setcycle 8 true_false FALSE
	setcycle 8 condition P1
	setcycle 8 stim "A dove has fins."
	setcycle 8 correct_response "[false_response]"
	setcycle 9 true_false FALSE
	setcycle 9 condition P1
	setcycle 9 stim "Satin is rough."
	setcycle 9 correct_response "[false_response]"
	setcycle 10 true_false FALSE
	setcycle 10 condition P2
	setcycle 10 stim "A sycamore has fruit."
	setcycle 10 correct_response "[false_response]"
	setcycle 11 true_false FALSE
	setcycle 11 condition P2
	setcycle 11 stim "Bourbon is gritty."
	setcycle 11 correct_response "[false_response]"
	setcycle 12 true_false FALSE
	setcycle 12 condition P2
	setcycle 12 stim "A brigade can fly."
	setcycle 12 correct_response "[false_response]"
	setcycle 13 true_false FALSE
	setcycle 13 condition PO
	setcycle 13 stim "Checkers has pawns."
	setcycle 13 correct_response "[false_response]"
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	setcycle 23 true_false FALSE
	setcycle 23 condition S1
	setcycle 23 stim "Football is a lottery."
	setcycle 23 correct_response "[false_response]"
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	setcycle 33 true_false FALSE
	setcycle 33 condition S2
	setcycle 33 stim "A mesquite is a mineral."
	setcycle 33 correct_response "[false_response]"
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	setcycle 36 true_false FALSE
	setcycle 36 condition SO
	setcycle 36 stim "Hockey is a race."
	setcycle 36 correct_response "[false_response]"
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	setcycle 46 true_false TRUE
	setcycle 46 condition P1
	setcycle 46 stim "Basketball has rules. "
	setcycle 46 correct_response "[true_response]"
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	setcycle 56 true_false TRUE
	setcycle 56 condition P2
	setcycle 56 stim "A birch has seeds."
	setcycle 56 correct_response "[true_response]"
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	setcycle 59 true_false TRUE
	setcycle 59 condition PO
	setcycle 59 stim "Football has goals. "
	setcycle 59 correct_response "[true_response]"
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	setcycle 69 true_false TRUE
	setcycle 69 condition S1
	setcycle 69 stim "Tennis is a game"
	setcycle 69 correct_response "[true_response]"
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	setcycle 79 true_false TRUE
	setcycle 79 condition S2
	setcycle 79 stim "An elm is a plant."
	setcycle 79 correct_response "[true_response]"
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	setcycle 82 true_false TRUE
	setcycle 82 condition SO
	setcycle 82 stim "Chess is chess. "
	setcycle 82 correct_response "[true_response]"
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	run trial_sequence

define loop block_two
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 108
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 true_false FALSE
	setcycle 0 condition P1
	setcycle 0 stim "A almond is square."
	setcycle 0 correct_response "[false_response]"
	setcycle 1 true_false FALSE
	setcycle 1 condition P1
	setcycle 1 stim "March is September."
	setcycle 1 correct_response "[false_response]"
	setcycle 2 true_false FALSE
	setcycle 2 condition P1
	setcycle 2 stim "An optometrist has a drill."
	setcycle 2 correct_response "[false_response]"
	setcycle 3 true_false FALSE
	setcycle 3 condition P1
	setcycle 3 stim "A tomato is born."
	setcycle 3 correct_response "[false_response]"
	setcycle 4 true_false FALSE
	setcycle 4 condition P1
	setcycle 4 stim "A cookbook has rhymes."
	setcycle 4 correct_response "[false_response]"
	setcycle 5 true_false FALSE
	setcycle 5 condition P1
	setcycle 5 stim "A bathroom has a refrigerator."
	setcycle 5 correct_response "[false_response]"
	setcycle 6 true_false FALSE
	setcycle 6 condition P1
	setcycle 6 stim "A mulberry has needles."
	setcycle 6 correct_response "[false_response]"
	setcycle 7 true_false FALSE
	setcycle 7 condition P1
	setcycle 7 stim "Vodka is a soft drink."
	setcycle 7 correct_response "[false_response]"
	setcycle 8 true_false FALSE
	setcycle 8 condition P1
	setcycle 8 stim "A infantryman has a rocket."
	setcycle 8 correct_response "[false_response]"
	setcycle 9 true_false FALSE
	setcycle 9 condition P1
	setcycle 9 stim "A boulder is small."
	setcycle 9 correct_response "[false_response]"
	setcycle 10 true_false FALSE
	setcycle 10 condition P1
	setcycle 10 stim "Hamburger has drumsticks."
	setcycle 10 correct_response "[false_response]"
	setcycle 11 true_false FALSE
	setcycle 11 condition P1
	setcycle 11 stim "A jeep has wings."
	setcycle 11 correct_response "[false_response]"
	setcycle 12 true_false FALSE
	setcycle 12 condition P2
	setcycle 12 stim "Sandstone is edible."
	setcycle 12 correct_response "[false_response]"
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	setcycle 15 true_false FALSE
	setcycle 15 condition PO
	setcycle 15 stim "A peanut is flat."
	setcycle 15 correct_response "[false_response]"
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	setcycle 27 true_false FALSE
	setcycle 27 condition S1
	setcycle 27 stim "A pistachio is a rodent."
	setcycle 27 correct_response "[false_response]"
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	setcycle 39 true_false FALSE
	setcycle 39 condition S2
	setcycle 39 stim "Turquoise is fruit."
	setcycle 39 correct_response "[false_response]"
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	setcycle 42 true_false FALSE
	setcycle 42 condition SO
	setcycle 42 stim "A hickory nut is a beetle nut."
	setcycle 42 correct_response "[false_response]"
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	setcycle 54 true_false TRUE
	setcycle 54 condition P1
	setcycle 54 stim "A chestnut has a shell."
	setcycle 54 correct_response "[true_response]"
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	setcycle 66 true_false TRUE
	setcycle 66 condition P2
	setcycle 66 stim "Granite is inorganic."
	setcycle 66 correct_response "[true_response]"
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	setcycle 69 true_false TRUE
	setcycle 69 condition PO
	setcycle 69 stim "A cashew is curved."
	setcycle 69 correct_response "[true_response]"
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	setcycle 81 true_false TRUE
	setcycle 81 condition S1
	setcycle 81 stim "February is a month."
	setcycle 81 correct_response "[true_response]"
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	setcycle 92 true_false TRUE
	setcycle 92 condition "S1."
	setcycle 92 stim "A pecan is a nut."
	setcycle 92 correct_response "[true_response]"
	setcycle 93 true_false TRUE
	setcycle 93 condition S2
	setcycle 93 stim "Shale is mineral."
	setcycle 93 correct_response "[true_response]"
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	setcycle 95 true_false TRUE
	setcycle 95 condition "S2."
	setcycle 95 stim "A Tesla is a vehicle."
	setcycle 95 correct_response "[true_response]"
	setcycle 96 true_false TRUE
	setcycle 96 condition SO
	setcycle 96 stim "A walnut is a walnut."
	setcycle 96 correct_response "[true_response]"
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	run trial_sequence

define sketchpad break
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Whew! Now you can take a break!<br /><br />Press any key when you are ready to start again." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_javascript always
	run instructions1 always
	run instructions2 always
	run instructions3 always
	run instructions4 always
	run block_one always
	run break always
	run block_two always

define sketchpad fixation
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad instructions1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In this experiment, you will read many sentences." x=0 y=0 z_index=0

define sketchpad instructions2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="After each sentence..<br /><br />Press [true_response] if the sentence is true.<br /><br />Press [false_response] if the sentence is false." x=0 y=0 z_index=0

define sketchpad instructions3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You will have four seconds to read and respond to each sentence.<br /><br />Answer as quickly and accurately as possible.<br /><br />You will get a break halfway through the experiment." x=0 y=0 z_index=0

define sketchpad instructions4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Remember, after each sentence..<br /><br />Press [true_response] if the sentence is true.<br /><br />Press [false_response] if the sentence is false." x=0 y=0 z_index=0

define keyboard_response keyboard_response
	set timeout 1000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;m"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define inline_javascript new_inline_javascript
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	if (vars.subject_parity == 'odd') {
	  vars.true_response = 'z';
	  vars.false_response = 'm'
	} else { 
	  vars.true_response = 'm';
	  vars.false_response = 'z'
	}
	__end__

define sketchpad stim
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[stim]" x=0 y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run stim always
	run fixation always
	run ISI always
	run keyboard_response always
	run logger always

