---
API: 2.1
OpenSesame: 3.3.10
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title Sternberg
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/ethan/Documents/GitHub/OpenSesame/Sternberg/experiment_files"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define sketchpad ISI
	set duration 2000
	set description "Displays stimuli"

define sketchpad break1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Block one complete!<br /><br />Take a break.<br /><br />When you are ready to continue, press either of the arrow keys." x=0 y=0 z_index=0

define sketchpad break_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Block two complete!<br /><br />Take a break.<br /><br />When you are ready for the final block,<br />press either of the arrow keys." x=0 y=0 z_index=0

define sketchpad correct_feedback
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=green font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="Correct!" x=0 y=0 z_index=0

define notepad credits
	__note__
	This implementation of the Sternberg experiment is taken directly from Tom Faulkenberry: 
	
	https://www.youtube.com/watch?v=HG8GmhlHOu4
	
	The stimuli are taken from Faulkenberry as well:
	
	https://github.com/tomfaulkenberry/courses/blob/master/fall2018/psyc5316/README.org
	
	The same stimuli can be found in the PsychoPy Sternberg demo:
	
	https://www.psychopy.org
	
	----------------------------------------
	
	I have added two breaks to Faulkenberry's original design, to give participants a rest, and give them a feeling for how far they have progressed.
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run credits always
	run instructions1a always
	run instructions1b always
	run practiceLoop always
	run instructions2 always
	run experimentLoop always
	run thankYou always

define loop experimentLoop
	set source_file "mainTrials.csv"
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 126
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 block experiment
	setcycle 0 setSize 1
	setcycle 0 posInSet 0
	setcycle 0 present n
	setcycle 0 numberSet 5
	setcycle 0 target 8
	setcycle 0 correct_response left
	setcycle 1 block experiment
	setcycle 1 setSize 1
	setcycle 1 posInSet 0
	setcycle 1 present n
	setcycle 1 numberSet 9
	setcycle 1 target 6
	setcycle 1 correct_response left
	setcycle 2 block experiment
	setcycle 2 setSize 1
	setcycle 2 posInSet 0
	setcycle 2 present n
	setcycle 2 numberSet 1
	setcycle 2 target 7
	setcycle 2 correct_response left
	setcycle 3 block experiment
	setcycle 3 setSize 1
	setcycle 3 posInSet 1
	setcycle 3 present y
	setcycle 3 numberSet 4
	setcycle 3 target 4
	setcycle 3 correct_response right
	setcycle 4 block experiment
	setcycle 4 setSize 1
	setcycle 4 posInSet 1
	setcycle 4 present y
	setcycle 4 numberSet 7
	setcycle 4 target 7
	setcycle 4 correct_response right
	setcycle 5 block experiment
	setcycle 5 setSize 1
	setcycle 5 posInSet 1
	setcycle 5 present y
	setcycle 5 numberSet 8
	setcycle 5 target 8
	setcycle 5 correct_response right
	setcycle 6 block experiment
	setcycle 6 setSize 2
	setcycle 6 posInSet 0
	setcycle 6 present n
	setcycle 6 numberSet "8 9"
	setcycle 6 target 5
	setcycle 6 correct_response left
	setcycle 7 block experiment
	setcycle 7 setSize 2
	setcycle 7 posInSet 0
	setcycle 7 present n
	setcycle 7 numberSet "6 8"
	setcycle 7 target 9
	setcycle 7 correct_response left
	setcycle 8 block experiment
	setcycle 8 setSize 2
	setcycle 8 posInSet 0
	setcycle 8 present n
	setcycle 8 numberSet "7 9"
	setcycle 8 target 1
	setcycle 8 correct_response left
	setcycle 9 block experiment
	setcycle 9 setSize 2
	setcycle 9 posInSet 1
	setcycle 9 present y
	setcycle 9 numberSet "6 2"
	setcycle 9 target 6
	setcycle 9 correct_response right
	setcycle 10 block experiment
	setcycle 10 setSize 2
	setcycle 10 posInSet 1
	setcycle 10 present y
	setcycle 10 numberSet "2 3"
	setcycle 10 target 2
	setcycle 10 correct_response right
	setcycle 11 block experiment
	setcycle 11 setSize 2
	setcycle 11 posInSet 1
	setcycle 11 present y
	setcycle 11 numberSet "3 4"
	setcycle 11 target 3
	setcycle 11 correct_response right
	setcycle 12 block experiment
	setcycle 12 setSize 2
	setcycle 12 posInSet 0
	setcycle 12 present n
	setcycle 12 numberSet "7 1"
	setcycle 12 target 8
	setcycle 12 correct_response left
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	setcycle 15 block experiment
	setcycle 15 setSize 2
	setcycle 15 posInSet 2
	setcycle 15 present y
	setcycle 15 numberSet "8 3"
	setcycle 15 target 3
	setcycle 15 correct_response right
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	setcycle 18 block experiment
	setcycle 18 setSize 3
	setcycle 18 posInSet 0
	setcycle 18 present n
	setcycle 18 numberSet "6 9 5"
	setcycle 18 target 8
	setcycle 18 correct_response left
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	setcycle 33 block experiment
	setcycle 33 setSize 3
	setcycle 33 posInSet 3
	setcycle 33 present y
	setcycle 33 numberSet "8 1 6"
	setcycle 33 target 6
	setcycle 33 correct_response right
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	setcycle 36 block experiment
	setcycle 36 setSize 4
	setcycle 36 posInSet 0
	setcycle 36 present n
	setcycle 36 numberSet "4 2 6 9"
	setcycle 36 target 7
	setcycle 36 correct_response left
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	setcycle 57 block experiment
	setcycle 57 setSize 4
	setcycle 57 posInSet 4
	setcycle 57 present y
	setcycle 57 numberSet "6 9 3 1"
	setcycle 57 target 1
	setcycle 57 correct_response right
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	setcycle 60 block experiment
	setcycle 60 setSize 5
	setcycle 60 posInSet 0
	setcycle 60 present n
	setcycle 60 numberSet "1 4 3 6 5"
	setcycle 60 target 8
	setcycle 60 correct_response left
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	setcycle 87 block experiment
	setcycle 87 setSize 5
	setcycle 87 posInSet 5
	setcycle 87 present y
	setcycle 87 numberSet "7 8 6 3 1"
	setcycle 87 target 1
	setcycle 87 correct_response right
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	setcycle 90 block experiment
	setcycle 90 setSize 6
	setcycle 90 posInSet 0
	setcycle 90 present n
	setcycle 90 numberSet "5 3 2 6 9 8"
	setcycle 90 target 4
	setcycle 90 correct_response left
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	setcycle 123 block experiment
	setcycle 123 setSize 6
	setcycle 123 posInSet 6
	setcycle 123 present y
	setcycle 123 numberSet "4 7 6 8 2 3"
	setcycle 123 target 3
	setcycle 123 correct_response right
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	run practiceSequence

define sketchpad fixation
	set duration 1000
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad incorrect_feedback
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="Incorrect!" x=0 y=0 z_index=0

define sketchpad instructions1a
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="In this experiment, you will see a series of between<br />1 and 6 numbers.<br /><br />After a short delay you will then see a single number.<br /><br />Your job will be to decide whether this single number<br />was in the series  of numbers you saw.<br /><br />Press any key to continue." x=0 y=0 z_index=0

define sketchpad instructions1b
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Press the Right Arrow key if the number WAS in the series.<br /><br />Press the Left Arrow key if the number was NOT in the series.<br /><br />Before you start the real experiment,<br />you will be given a number of practice trials.<br /><br />Try to respond as quickly and accurately as possible. <br /><br />If you wait too long, <br />the experiment will automatically count <br />your response as incorrect.<br /><br />When you are ready to begin, press either arrow key." x=0 y=0 z_index=0

define sketchpad instructions2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Alright, practice time is over it's time to start the main experiment!<br /><br />Remember:<br />- Press the Right Arrow if the number WAS in the series<br />- Press the Left Arrow if the number was NOT in the series.<br /><br />Try to respond as quickly and accurately as possible.<br /><br />The experiment is divided into three blocks.<br />You can take a break between blocks.<br />Each block lasts around 5 minutes.<br /><br />When you are ready to begin, press either arrow key." x=0 y=0 z_index=0

define keyboard_response keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "left;right"

define sketchpad memory_set
	set duration 1200
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[numberSet]" x=0 y=0 z_index=0

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define loop practiceLoop
	set source_file "pracTrials.csv"
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 block practice
	setcycle 0 setSize 1
	setcycle 0 posInSet 1
	setcycle 0 present y
	setcycle 0 numberSet 6
	setcycle 0 target 6
	setcycle 0 correct_response right
	setcycle 1 block practice
	setcycle 1 setSize 1
	setcycle 1 posInSet 0
	setcycle 1 present n
	setcycle 1 numberSet 5
	setcycle 1 target 3
	setcycle 1 correct_response left
	setcycle 2 block practice
	setcycle 2 setSize 2
	setcycle 2 posInSet 1
	setcycle 2 present y
	setcycle 2 numberSet "4 8"
	setcycle 2 target 4
	setcycle 2 correct_response right
	setcycle 3 block practice
	setcycle 3 setSize 2
	setcycle 3 posInSet 0
	setcycle 3 present n
	setcycle 3 numberSet "2 1"
	setcycle 3 target 5
	setcycle 3 correct_response left
	setcycle 4 block practice
	setcycle 4 setSize 3
	setcycle 4 posInSet 3
	setcycle 4 present y
	setcycle 4 numberSet "2 9 4"
	setcycle 4 target 4
	setcycle 4 correct_response right
	setcycle 5 block practice
	setcycle 5 setSize 3
	setcycle 5 posInSet 0
	setcycle 5 present n
	setcycle 5 numberSet "4 1 5"
	setcycle 5 target 2
	setcycle 5 correct_response left
	setcycle 6 block practice
	setcycle 6 setSize 4
	setcycle 6 posInSet 2
	setcycle 6 present y
	setcycle 6 numberSet "1 5 2 9"
	setcycle 6 target 5
	setcycle 6 correct_response right
	setcycle 7 block practice
	setcycle 7 setSize 4
	setcycle 7 posInSet 0
	setcycle 7 present n
	setcycle 7 numberSet "3 1 9 4"
	setcycle 7 target 6
	setcycle 7 correct_response left
	setcycle 8 block practice
	setcycle 8 setSize 5
	setcycle 8 posInSet 4
	setcycle 8 present y
	setcycle 8 numberSet "1 7 9 8 5"
	setcycle 8 target 8
	setcycle 8 correct_response right
	setcycle 9 block practice
	setcycle 9 setSize 5
	setcycle 9 posInSet 0
	setcycle 9 present n
	setcycle 9 numberSet "9 6 7 4 5"
	setcycle 9 target 3
	setcycle 9 correct_response left
	setcycle 10 block practice
	setcycle 10 setSize 6
	setcycle 10 posInSet 1
	setcycle 10 present y
	setcycle 10 numberSet "4 3 1 7 9 8"
	setcycle 10 target 4
	setcycle 10 correct_response right
	setcycle 11 block practice
	setcycle 11 setSize 6
	setcycle 11 posInSet 0
	setcycle 11 present n
	setcycle 11 numberSet "5 7 8 4 1 2"
	setcycle 11 target 6
	setcycle 11 correct_response left
	run practiceSequence

define sequence practiceSequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run memory_set always
	run ISI always
	run probe always
	run keyboard_response always
	run new_logger always
	run correct_feedback "[correct]=1"
	run incorrect_feedback "[correct]=0"
	run break1 "[count_probe]=54"
	run break_2 "[count_probe]=96"

define sketchpad probe
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=36 html=yes show_if=always text="[target]" x=0 y=0 z_index=0

define sketchpad thankYou
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="All done!<br /><br />Thank you for participating!" x=0 y=0 z_index=0

