---
API: 2.1
OpenSesame: 3.3.11a1
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title Stroop
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/ethan/Documents/GitHub/OpenSesame/Stroop/demo"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define sketchpad ISI
	set duration 1000
	set description "Displays stimuli"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run general_instruction always
	run reading_instructions always
	run reading always
	run naming_instructions always
	run naming always
	run thanks always

define sketchpad feedback_correct
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=always text="😃" x=0 y=0 z_index=0

define sketchpad feedback_incorrect
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=always text="😢" x=0 y=0 z_index=0

define sketchpad fixation
	set duration 750
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad general_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="In this experiment, you will see some color words.<br /><br />You will need to respond either to the color of the word,<br />or the color ink that the word is written in." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="press any key to start" x=0 y=224 z_index=0

define keyboard_response keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "r;g;b;y"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define loop naming
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 word red
	setcycle 0 color red
	setcycle 0 interference 0
	setcycle 0 correct_response r
	setcycle 0 task naming
	setcycle 1 word red
	setcycle 1 color blue
	setcycle 1 interference 1
	setcycle 1 correct_response b
	setcycle 1 task naming
	setcycle 2 word red
	setcycle 2 color yellow
	setcycle 2 interference 1
	setcycle 2 correct_response y
	setcycle 2 task naming
	setcycle 3 word blue
	setcycle 3 color red
	setcycle 3 interference 1
	setcycle 3 correct_response r
	setcycle 3 task naming
	setcycle 4 word blue
	setcycle 4 color blue
	setcycle 4 interference 0
	setcycle 4 correct_response b
	setcycle 4 task naming
	setcycle 5 word blue
	setcycle 5 color yellow
	setcycle 5 interference 1
	setcycle 5 correct_response y
	setcycle 5 task naming
	setcycle 6 word yellow
	setcycle 6 color red
	setcycle 6 interference 1
	setcycle 6 correct_response r
	setcycle 6 task naming
	setcycle 7 word yellow
	setcycle 7 color blue
	setcycle 7 interference 1
	setcycle 7 correct_response b
	setcycle 7 task naming
	setcycle 8 word yellow
	setcycle 8 color yellow
	setcycle 8 interference 0
	setcycle 8 correct_response y
	setcycle 8 task naming
	run trial_sequence

define sketchpad naming_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="If the ink is red, press r<br />If the ink is blue, press b<br />If the ink is yellow, press y" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="press any key to start" x=0 y=224 z_index=0

define loop reading
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 word red
	setcycle 0 color red
	setcycle 0 interference 0
	setcycle 0 correct_response r
	setcycle 0 task reading
	setcycle 1 word red
	setcycle 1 color blue
	setcycle 1 interference 1
	setcycle 1 correct_response r
	setcycle 1 task reading
	setcycle 2 word red
	setcycle 2 color yellow
	setcycle 2 interference 1
	setcycle 2 correct_response r
	setcycle 2 task reading
	setcycle 3 word blue
	setcycle 3 color red
	setcycle 3 interference 1
	setcycle 3 correct_response b
	setcycle 3 task reading
	setcycle 4 word blue
	setcycle 4 color blue
	setcycle 4 interference 0
	setcycle 4 correct_response b
	setcycle 4 task reading
	setcycle 5 word blue
	setcycle 5 color yellow
	setcycle 5 interference 1
	setcycle 5 correct_response b
	setcycle 5 task reading
	setcycle 6 word yellow
	setcycle 6 color red
	setcycle 6 interference 1
	setcycle 6 correct_response y
	setcycle 6 task reading
	setcycle 7 word yellow
	setcycle 7 color blue
	setcycle 7 interference 1
	setcycle 7 correct_response y
	setcycle 7 task reading
	setcycle 8 word yellow
	setcycle 8 color yellow
	setcycle 8 interference 0
	setcycle 8 correct_response y
	setcycle 8 task reading
	run trial_sequence

define sketchpad reading_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="If the word says red, press r<br />If the word says blue, press b<br />If the word says yellow, press y" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="press any key to start" x=0 y=224 z_index=0

define sketchpad stimulus
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="[color]" font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="[word]" x=0 y=0 z_index=0

define sketchpad thanks
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Thanks for participating.<br /><br />You're a star!!<br /><br />" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=always text="⭐️" x=0 y=160 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run stimulus always
	run keyboard_response always
	run feedback_correct "[correct] = 1"
	run feedback_incorrect "[correct] = 0"
	run ISI always
	run logger always

