---
API: 2.1
Description: A simple word/ nonword categorization
OpenSesame: 3.3.11a3
Platform: posix
Title: Lexical-decision task
---
set width 1024
set uniform_coordinates no
set title Tap_baseline
set synth_backend legacy
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 32
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/ethan/Documents/GitHub/OpenSesame/Tap_baseline"
set disable_garbage_collection yes
set description "A simple lexical-decision example experiment"
set coordinates relative
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background grey

define notepad about_this_example
	__note__
	In a lexical-decision experiment, the task is to categorize letter strings on
	some feature, such as wether they form a word (e.g. 'apple') or not
	(e.g. 'ipple'). Usually, the goal of a lexical-decision experiment is to analyze
	the response times to words as a function of another variable, that is, not the
	variable that participants base their response on.
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define loop block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 50
	set continuous no
	set column_order "correct_response;target;category"
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response m
	setcycle 0 trial 1
	setcycle 1 correct_response m
	setcycle 1 trial 2
	setcycle 2 correct_response m
	setcycle 2 trial 3
	setcycle 3 correct_response m
	setcycle 3 trial 4
	setcycle 4 correct_response m
	setcycle 4 trial 5
	setcycle 5 correct_response m
	setcycle 5 trial 6
	setcycle 6 correct_response m
	setcycle 6 trial 7
	setcycle 7 correct_response m
	setcycle 7 trial 8
	setcycle 8 correct_response m
	setcycle 8 trial 9
	setcycle 9 correct_response m
	setcycle 9 trial 10
	setcycle 10 correct_response m
	setcycle 10 trial 11
	setcycle 11 correct_response m
	setcycle 11 trial 12
	setcycle 12 correct_response m
	setcycle 12 trial 13
	setcycle 13 correct_response m
	setcycle 13 trial 14
	setcycle 14 correct_response m
	setcycle 14 trial 15
	setcycle 15 correct_response m
	setcycle 15 trial 16
	setcycle 16 correct_response m
	setcycle 16 trial 17
	setcycle 17 correct_response m
	setcycle 17 trial 18
	setcycle 18 correct_response m
	setcycle 18 trial 19
	setcycle 19 correct_response m
	setcycle 19 trial 20
	setcycle 20 correct_response m
	setcycle 20 trial 21
	setcycle 21 correct_response m
	setcycle 21 trial 22
	setcycle 22 correct_response m
	setcycle 22 trial 23
	setcycle 23 correct_response m
	setcycle 23 trial 24
	setcycle 24 correct_response m
	setcycle 24 trial 25
	setcycle 25 correct_response m
	setcycle 25 trial 26
	setcycle 26 correct_response m
	setcycle 26 trial 27
	setcycle 27 correct_response m
	setcycle 27 trial 28
	setcycle 28 correct_response m
	setcycle 28 trial 29
	setcycle 29 correct_response m
	setcycle 29 trial 30
	setcycle 30 correct_response m
	setcycle 30 trial 31
	setcycle 31 correct_response m
	setcycle 31 trial 32
	setcycle 32 correct_response m
	setcycle 32 trial 33
	setcycle 33 correct_response m
	setcycle 33 trial 34
	setcycle 34 correct_response m
	setcycle 34 trial 35
	setcycle 35 correct_response m
	setcycle 35 trial 36
	setcycle 36 correct_response m
	setcycle 36 trial 37
	setcycle 37 correct_response m
	setcycle 37 trial 38
	setcycle 38 correct_response m
	setcycle 38 trial 39
	setcycle 39 correct_response m
	setcycle 39 trial 40
	setcycle 40 correct_response m
	setcycle 40 trial 41
	setcycle 41 correct_response m
	setcycle 41 trial 42
	setcycle 42 correct_response m
	setcycle 42 trial 43
	setcycle 43 correct_response m
	setcycle 43 trial 44
	setcycle 44 correct_response m
	setcycle 44 trial 45
	setcycle 45 correct_response m
	setcycle 45 trial 46
	setcycle 46 correct_response m
	setcycle 46 trial 47
	setcycle 47 correct_response m
	setcycle 47 trial 48
	setcycle 48 correct_response m
	setcycle 48 trial 49
	setcycle 49 correct_response m
	setcycle 49 trial 50
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containging a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run block_loop always
	run feedback always

define sketchpad cookie
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad cookie_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=1 show_if=always x=0 y=0 z_index=0
	draw ellipse color=white fill=1 h=64 penwidth=1 show_if=always w=224 x=-416 y=128 z_index=0
	draw circle color=white fill=1 penwidth=1 r=64 show_if=always x=-256 y=160 z_index=0

define sketchpad cookie_1_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=1 show_if=always x=0 y=0 z_index=0
	draw ellipse color=white fill=1 h=64 penwidth=1 show_if=always w=224 x=-416 y=128 z_index=0

define sketchpad cookie_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=1 show_if=always x=0 y=0 z_index=0
	draw ellipse color=white fill=1 h=64 penwidth=1 show_if=always w=224 x=-416 y=128 z_index=0

define sketchpad cookie_1_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=1 show_if=always x=0 y=0 z_index=0
	draw ellipse color=white fill=1 h=64 penwidth=1 show_if=always w=224 x=-416 y=128 z_index=0

define sketchpad cookie_1_1_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=1 show_if=always x=0 y=0 z_index=0
	draw ellipse color=white fill=1 h=64 penwidth=1 show_if=always w=224 x=-416 y=128 z_index=0

define sketchpad cookie_1_1_1_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=1 show_if=always x=0 y=0 z_index=0
	draw ellipse color=white fill=1 h=64 penwidth=1 show_if=always w=224 x=-416 y=128 z_index=0

define sketchpad cookie_1_1_1_1_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=1 show_if=always x=0 y=0 z_index=0
	draw ellipse color=white fill=1 h=64 penwidth=1 show_if=always w=224 x=-416 y=128 z_index=0

define sketchpad cookie_1_1_1_1_1_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=1 show_if=always x=0 y=0 z_index=0
	draw ellipse color=white fill=1 h=64 penwidth=1 show_if=always w=224 x=-416 y=128 z_index=0

define sketchpad cookie_1_1_1_1_1_1_1_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=1 show_if=always x=0 y=0 z_index=0
	draw ellipse color=white fill=1 h=64 penwidth=1 show_if=always w=224 x=-416 y=128 z_index=0

define sketchpad cookie_1_1_1_1_1_1_1_2_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=1 show_if=always x=0 y=0 z_index=0
	draw ellipse color=white fill=1 h=64 penwidth=1 show_if=always w=224 x=-416 y=128 z_index=0

define sketchpad cookie_1_1_1_1_1_1_1_2_1_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=1 show_if=always x=0 y=0 z_index=0
	draw ellipse color=white fill=1 h=64 penwidth=1 show_if=always w=224 x=-416 y=128 z_index=0

define sketchpad cookie_1_1_1_1_1_1_1_2_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=1 show_if=always x=0 y=0 z_index=0
	draw ellipse color=white fill=1 h=64 penwidth=1 show_if=always w=224 x=-416 y=128 z_index=0

define sketchpad cookie_1_1_1_1_1_1_1_2_1_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=1 show_if=always x=0 y=0 z_index=0
	draw ellipse color=white fill=1 h=64 penwidth=1 show_if=always w=224 x=-416 y=128 z_index=0

define sketchpad cookie_1_1_1_1_1_1_1_2_1_1_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=1 show_if=always x=0 y=0 z_index=0
	draw ellipse color=white fill=1 h=64 penwidth=1 show_if=always w=224 x=-416 y=128 z_index=0

define inline_javascript countervalance_javascript
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	if (vars.subject_parity = "odd") {
	    vars.word_response = "z"
	    vars.nonword_response = "m"
	}
	else {
	    vars.word_response = "m"
	    vars.nonword_response = "z"
	}
	__end__

define sketchpad end_of_practice
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="The practice phase is finished<br />The real experiment will start now<br /><br />Press any key to continue" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run about_this_example always
	run instructions always
	run practice_loop always
	run goodbye always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run block_sequence

define feedback feedback
	set reset_variables yes
	set duration 3000
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=32 html=yes show_if=always text="<br />Nice!<br /><br />Your average response time was [avg_rt] ms!<br /><br />" x=0 y=0 z_index=0

define sketchpad fixation
	set start_response_interval no
	set duration 500
	set description "Displays stimuli"
	draw line color=white penwidth=2 show_if=always x1=-32 x2=32 y1=-32 y2=-32 z_index=0
	draw line color=white penwidth=2 show_if=always x1=-32 x2=32 y1=32 y2=32 z_index=0

define sketchpad goodbye
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="The experiment is finished<br />Thank you for participating<br /><br />Press any key to exit" x=0 y=0 z_index=0

define sketchpad green_fix
	set start_response_interval no
	set duration 500
	set description "Displays stimuli"
	draw line color=green penwidth=2 show_if=always x1=-32 x2=32 y1=-32 y2=-32 z_index=0
	draw line color=green penwidth=2 show_if=always x1=-32 x2=32 y1=32 y2=32 z_index=0

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=32 html=yes show_if=always text="Instructions<br /><br /><br />Tap the 'm' key as fast as you can<br />to get the counter to 50!<br /><br />Press 'm' to start." x=0 y=0 z_index=0

define keyboard_response keyboard_response
	set timeout 5000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses m

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log subject_nr
	log count_reset_feedback
	log count_trial_sequence
	log category
	log target
	log response_keyboard_response
	log correct_response
	log correct
	log accuracy
	log response_time
	log acc
	log avg_rt

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="working_file.png" scale=1 show_if=always x=-128 y=-32 z_index=0

define sketchpad new_sketchpad_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie.jpeg" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad nomnom
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cookie2.jpg" scale=0.75 show_if=always x=0 y=400 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run block_sequence

define sketchpad red_fix
	set start_response_interval no
	set duration 500
	set description "Displays stimuli"
	draw line color=red penwidth=2 show_if=always x1=-32 x2=32 y1=-32 y2=-32 z_index=0
	draw line color=red penwidth=2 show_if=always x1=-32 x2=32 y1=32 y2=32 z_index=0

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad tap
	set start_response_interval no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[trial]" x=0 y=0 z_index=0
	draw line color=white penwidth=2 show_if=always x1=-32 x2=32 y1=-32 y2=-32 z_index=0
	draw line color=white penwidth=2 show_if=always x1=-32 x2=32 y1=32 y2=32 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run tap always
	run keyboard_response always
	run logger always

